PsychoPy2experiment version="2024.2.2a1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'start_block': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = LEFT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = Experiment_diode
  eyetracker = SR Research Ltd
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine fixation
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    TextComponent fixcross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        # In your fixation Begin Routine
        win.callOnFlip(eyetracker.sendMessage,
                       f"TRIAL_START {trials.thisN} cueDir={cueDir}")
        thisExp.addData('block_number', current_block)
  Routine placeholder
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    TextComponent fixcross_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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    PolygonComponent l_circle
      fillColor = none
      lineColor = black
      pos = (-0.5, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = norm
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    PolygonComponent r_circle
      fillColor = none
      lineColor = black
      pos = (0.5, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = norm
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  Routine cue
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        if cueDir == 'left':
            cuePos = (-0.5, 0)
        else:
            cuePos = (0.5, 0)

        #trigger status
        cue_trig=False
      Each Frame:
        # In your cue Each Frame
        if cue_circle.status == STARTED and not cue_trig:
            win.callOnFlip(dev.activate_line, bitmask=EEG_cue_onset)
            win.callOnFlip(eyetracker.sendMessage,
                       f"CUE_ONSET dir={cueDir} trial={trials.thisN}")
            cue_trig=True
    PolygonComponent cue_circle
      fillColor = $[0,0,0]
      lineWidth = 5
      pos [set every repeat] = cuePos
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = height
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    PolygonComponent square_upper_left
      anchor = top-left
      fillColor = white
      pos = (-win.size[0]/2,win.size[1]/2)
      shape = rectangle
      size = (50,50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent square_bottom_right
      anchor = bottom-right
      fillColor = white
      pos = (win.size[0]/2, -win.size[1]/2)
      shape = rectangle
      size = (50, 50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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  Routine cue_to_target
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        jitter = jitter_list[jitter_index]
        jitter_index += 1
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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  Routine gabor_patch
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if valid == 1:
            stimLoc = cueDir
        else:
            stimLoc = 'right' if cueDir == 'left' else 'left'

        stimPos = (-0.5, 0) if stimLoc == 'left' else (0.5, 0)
        gabor_angle = level * tiltDir
        gabor.ori = gabor_angle
        gabor.setPos(stimPos)
        gabor.sf = 5

        # trigger sent status
        stim_trig=False
      Each Frame:
        if gabor.status == STARTED and not stim_trig:
            win.callOnFlip(dev.activate_line, bitmask=EEG_stim_onset)
            win.callOnFlip(eyetracker.sendMessage,
                       f"GABOR_ONSET valid={valid} angle={gabor_angle:.2f}")
            stim_trig=True
    GratingComponent gabor
      contrast = 0.1
      mask = gauss
      ori [set every repeat] = gabor_angle
      pos [set every repeat] = stimPos
      sf = 5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      tex = sin
      units = height
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    PolygonComponent square_upper_left2
      anchor = top-left
      fillColor = white
      pos = (-win.size[0]/2, win.size[1]/2)
      shape = rectangle
      size = (50,50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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    PolygonComponent square_bottom_right2
      anchor = bottom-right
      fillColor = white
      pos = (win.size[0]/2, -win.size[1]/2)
      shape = rectangle
      size = (50, 50)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = pix
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  Routine response
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      correctAns = $corr_response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Py
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      End Routine:
        if str(key_resp.keys) == str(corr_response):
            key_resp.corr = 1
        else:
            key_resp.corr = 0

        thisExp.addData('gabor_angle', gabor_angle)
        thisExp.addData('level', level)
        thisExp.addData('jitter', jitter)
        thisExp.addData('tiltDir', tiltDir)
        thisExp.addData('key_resp.corr', key_resp.corr)

        # Per-block tracking
        if key_resp.keys in ['', [], None]:
            expInfo[f'block_{current_block}_noresp'] += 1
        else:
            expInfo[f'block_{current_block}_total'] += 1
            if key_resp.corr == 1:
                expInfo[f'block_{current_block}_correct'] += 1

        # Cumulative tracking
        if key_resp.keys not in ['', [], None]:
            expInfo['total_trials'] += 1
            if key_resp.corr == 1:
                expInfo['total_correct'] += 1
        else:
            expInfo['total_noresp'] += 1
  Routine instructions
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    KeyboardComponent progress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instruction
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Please wait for the experimenter to begin.
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    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
        # Create 60 unique jitters and shuffle them
        jitter_list = [round(1.0 + i * (1/60), 6) for i in range(61)]
        np.random.shuffle(jitter_list)
        jitter_index = 0

        # Check jitters
        print(f"Jitter list length: {len(jitter_list)}")
        print(f"Min: {min(jitter_list)}, Max: {max(jitter_list)}")
        print(f"Step size: {round(jitter_list[1] - jitter_list[0], 6)}")

        import json
        import random

        # Builds a 60-trial cueDir sequence with no more than `max_consecutive`
        # same-side trials in a row. Used by code_9 to build each block's actual
        # trial order (fed into the 'trials' loop below), so this constraint is
        # real and not just generated-and-discarded.
        def generate_constrained_sequence(n_valid_left, n_valid_right,
                                           max_consecutive=5, max_attempts=10000):
            trial_pool = []
            for _ in range(n_valid_left):
                trial_pool.append({'cueDir': 'left', 'valid': 1, 'trialType': 'valid_left'})
            for _ in range(n_valid_right):
                trial_pool.append({'cueDir': 'right', 'valid': 1, 'trialType': 'valid_right'})

            for attempt in range(max_attempts):
                random.shuffle(trial_pool)
                valid_sequence = True
                consecutive = 1
                for i in range(1, len(trial_pool)):
                    if trial_pool[i]['cueDir'] == trial_pool[i-1]['cueDir']:
                        consecutive += 1
                        if consecutive > max_consecutive:
                            valid_sequence = False
                            break
                    else:
                        consecutive = 1
                if valid_sequence:
                    return list(trial_pool)

            print("Warning: could not find valid sequence, using last attempt")
            return list(trial_pool)

        def generate_constrained_tilt(n_total, max_consecutive=4, max_attempts=10000):
            tilt_pool = [1] * (n_total // 2) + [-1] * (n_total // 2)
            for attempt in range(max_attempts):
                random.shuffle(tilt_pool)
                valid = True
                consecutive = 1
                for i in range(1, len(tilt_pool)):
                    if tilt_pool[i] == tilt_pool[i-1]:
                        consecutive += 1
                        if consecutive > max_consecutive:
                            valid = False
                            break
                    else:
                        consecutive = 1
                if valid:
                    return list(tilt_pool)
            print("Warning: could not find valid tilt sequence, using last attempt")
            return list(tilt_pool)

        n_valid_left = 30
        n_valid_right = 30

        threshold_file = f"data/threshold_{expInfo['participant']}.json"
        if os.path.exists(threshold_file):
            with open(threshold_file, 'r') as f:
                threshold_data = json.load(f)
            level = threshold_data['threshold_angle']
            print(f"Loaded threshold angle for participant {expInfo['participant']} from {threshold_file}: {level:.2f} degrees")
        else:
            level = 15.0
            print(f"Warning: no threshold file found at {threshold_file}, using default 15 degrees")
        thisExp.addData('threshold_angle_used', level)

        # Block tracking - start_block input specifies which block the participant starts on
        current_block = int(expInfo['start_block'])
        target_blocks = 8  # soft target - experiment continues past this if needed

        # Cumulative accuracy tracking across all blocks
        expInfo['total_correct'] = 0
        expInfo['total_trials'] = 0
        expInfo['total_noresp'] = 0
        expInfo['completed_blocks'] = 0
  Routine endroutine
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    CodeComponent code_7
      Code Type = Py
      End Experiment:
        print(f"Experiment complete!")
        print(f"Threshold angle used: {level:.2f} degrees")
      End Routine:
        # EyeLink cleanup is handled automatically by PsychoPy
        win.mouseVisible = True

        # Print final summary across all blocks
        print(f"\n{'='*50}")
        print(f"EXPERIMENT COMPLETE - FINAL SUMMARY")
        print(f"{'='*50}")
        print(f"Total blocks completed: {current_block - 1}")
        print(f"Total trials: {expInfo['total_trials']}")
        print(f"Total no-response trials: {expInfo['total_noresp']}")

        if expInfo['total_trials'] > 0:
            overall_acc = (expInfo['total_correct'] / expInfo['total_trials']) * 100
        else:
            overall_acc = 0

        print(f"Overall accuracy: {overall_acc:.1f}%")
        print(f"Threshold angle used: {level:.2f} degrees")

        print(f"\nPer-block breakdown:")

        for b in range(1, current_block):
            b_correct = expInfo.get(f'block_{b}_correct', 0)
            b_total = expInfo.get(f'block_{b}_total', 0)
            b_noresp = expInfo.get(f'block_{b}_noresp', 0)
            b_acc = (b_correct / b_total * 100) if b_total > 0 else 0
            print(f"  Block {b}: {b_total} trials, "
                  f"{b_noresp} no-resp, "
                  f"{b_acc:.1f}% accuracy")

        print(f"{'='*50}\n")
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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  Routine block_control
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    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        # Regenerate jitter list fresh each block with new random order
        jitter_list = [round(1.0 + i * (1/60), 6) for i in range(61)]
        np.random.shuffle(jitter_list)
        jitter_index = 0

        # Build this block's actual trial order (max 4 consecutive same-side cues),
        # fed directly into the 'trials' loop via its conditionsFile = $block_trial_list_file
        block_trial_list = generate_constrained_sequence(n_valid_left, n_valid_right, max_consecutive=4)
        tilt_sequence = generate_constrained_tilt(len(block_trial_list), max_consecutive=4)
        for i, trial in enumerate(block_trial_list):
            trial['tiltDir'] = tilt_sequence[i]
            trial['corr_response'] = '2' if trial['tiltDir'] == 1 else '1'

        # data.importConditions() needs an actual file, not a Python list, so write
        # this block's constrained trial order to a small CSV and point the 'trials'
        # loop at that file (conditionsFile = $block_trial_list_file)
        import csv
        block_trial_list_file = f"data/_block_trial_list_{expInfo['participant']}.csv"
        with open(block_trial_list_file, 'w', newline='') as f:
            writer = csv.DictWriter(f, fieldnames=['cueDir', 'valid', 'trialType', 'corr_response', 'tiltDir'])
            writer.writeheader()
            writer.writerows(block_trial_list)

        # Reset per-block counters
        expInfo[f'block_{current_block}_correct'] = 0
        expInfo[f'block_{current_block}_total'] = 0
        expInfo[f'block_{current_block}_noresp'] = 0

        print(f"\n{'='*50}")
        print(f"Starting Block {current_block}")
        print(f"{'='*50}")
  Routine between_block
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    TextComponent end_block_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Block {current_block} of {target_blocks} complete!\n\nPlease wait for the experimenter to advance."
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    KeyboardComponent between_block_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        # Write the block summary immediately when the block ends, rather than
        # waiting for the experimenter to press SPACE to advance - this guarantees
        # the summary is captured even if the run stops on this screen.
        block_correct = expInfo[f'block_{current_block}_correct']
        block_total = expInfo[f'block_{current_block}_total']
        block_noresp = expInfo[f'block_{current_block}_noresp']

        if block_total > 0:
            block_acc = (block_correct / block_total) * 100
        else:
            block_acc = 0

        print(f"\nBlock {current_block} Summary:")
        print(f"  Trials completed: {block_total}")
        print(f"  No-response trials: {block_noresp}")
        print(f"  Correct responses: {block_correct}")
        print(f"  Block accuracy: {block_acc:.1f}%")

        # Save block summary to data output
        thisExp.addData('block_number', current_block)
        thisExp.addData('block_total_trials', block_total)
        thisExp.addData('block_correct', block_correct)
        thisExp.addData('block_noresp', block_noresp)
        thisExp.addData('block_accuracy', block_acc)
        thisExp.addData('threshold_angle_used', level)

        # Cumulative totals as of this block, saved here (not just at the very end)
        # so they survive even if the run stops before reaching the final routine
        overall_accuracy = (expInfo['total_correct'] / expInfo['total_trials'] * 100) if expInfo['total_trials'] > 0 else 0
        thisExp.addData('total_blocks_completed', current_block)
        thisExp.addData('total_trials', expInfo['total_trials'])
        thisExp.addData('total_correct', expInfo['total_correct'])
        thisExp.addData('total_noresp', expInfo['total_noresp'])
        thisExp.addData('overall_accuracy', overall_accuracy)

        # Increment block counter
        current_block += 1

        # Check if we've hit target blocks and ask experimenter
        if current_block > target_blocks:
            print(f"\nTarget of {target_blocks} blocks reached.")
            print("Experimenter can press SPACE to run another block or ESC to end.")
  EyetrackerCalibrationRoutine eye_calibration
    borderColor = green
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = white
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = black
    innerRadius = 0.005
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.015
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine eye_start
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    EyetrackerRecordComponent etRecord_start
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_eye_start_trigger
      Code Type = Py
      Begin Routine:
        win.callOnFlip(eyetracker.sendMessage, f"BLOCK_{current_block}_REC_START")
        thisExp.addData('eyetracker_rec_start_block', current_block)
  Routine eye_stop
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    EyetrackerRecordComponent etRecord_stop
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_eye_stop_trigger
      Code Type = Py
      Begin Routine:
        win.callOnFlip(eyetracker.sendMessage, f"BLOCK_{current_block}_REC_STOP")
        thisExp.addData('eyetracker_rec_stop_block', current_block)
  Routine init
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    CodeComponent init_code
      Code Type = Py
      Before Experiment:
        ###############################################################################

        #---ANT related---#
        import pyxid2
        import threading
        import signal
        import pandas as pd
        import random
        import json
        import os

        def exit_after(s):
            '''
            function decorator to raise KeyboardInterrupt exception
            if function takes longer than s seconds
            '''
            def outer(fn):
                def inner(*args, **kwargs):
                    timer = threading.Timer(s, signal.raise_signal, args=[signal.SIGINT])
                    timer.start()
                    try:
                        result = fn(*args, **kwargs)
                    finally:
                        timer.cancel()
                    return result
                return inner
            return outer


        @exit_after(1)  # exit if function takes longer than 1 seconds
        def _get_xid_devices():
            return pyxid2.get_xid_devices()


        def get_xid_devices():
            print("Getting a list of all attached XID devices...")
            attempt_count = 0
            while attempt_count >= 0:
                attempt_count += 1
                print('     Attempt:', attempt_count)
                attempt_count *= -1  # try to exit the while loop
                try:
                    devices = _get_xid_devices()
                except KeyboardInterrupt:
                    attempt_count *= -1  # get back in the while loop
            return devices


        devices = get_xid_devices()

        if devices:
            dev = devices[0]
            print("Found device:", dev)
            assert dev.device_name == 'Cedrus C-POD', "Incorrect C-POD detected." #need to change to trigger box
            dev.set_pulse_duration(5)  # set pulse duration to 5ms

            # Start EEG recording
            print("Sending trigger code 126 to start EEG recording...")
            dev.activate_line(bitmask=126)  # trigger 126 will start EEG
            print("Waiting 10 seconds for the EEG recording to start...\n")
            core.wait(10)  # wait 10s for the EEG system to start recording

            # Marching lights test
            print("C-POD<->eego 7-bit trigger lines test...")
            for line in range(1, 8):  # raise lines 1-7 one at a time
                print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
                dev.activate_line(lines=line)
                core.wait(0.5)  # wait 500ms between two consecutive triggers
            dev.con.set_digio_lines_to_mask(0)  # XidDevice.clear_all_lines()
            print("EEG system is now ready for the experiment to start.\n")

        else:
            # Dummy XidDevice for code components to run without C-POD connected
            class dummyXidDevice(object):
                def __init__(self):
                    pass
                def activate_line(self, lines=None, bitmask=None):
                    pass


            print("WARNING: No C-POD connected for this session! "
                  "You must start/stop EEG recording manually!\n")
            dev = dummyXidDevice()
        #------#


        ###############################################################################
      Begin Experiment:
        ##########################################
        EEG_cue_onset=10
        EEG_stim_onset=11

        ##########################################
Flow
  Routine init
  EyetrackerCalibrationRoutine eye_calibration
  Routine instructions
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 999
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    Routine eye_start
    Routine block_control
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $block_trial_list_file
      loopType = sequential
      nReps = 1
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      Routine fixation
      Routine cue
      Routine cue_to_target
      Routine gabor_patch
      Routine response
    LoopTerminator trials
    Routine eye_stop
    Routine between_block
  LoopTerminator blocks
  Routine endroutine
