PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_session%s_%s_%s' % (expInfo['participant'], expInfo['session'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '1', 'start_angle': '15'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_2
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_AREA
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = LEFT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = Practice
  eyetracker = SR Research Ltd
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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  Routine fixation
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    TextComponent fixcross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    CodeComponent code_gaze_fixation
      Code Type = Py
      Begin Routine:
        # Gaze-contingent fixation check
        # Radius = 1/4 of the distance from fixation (0,0) to the stimulus position (+/-0.5)
        fixation_radius = 0.125  # height units
        fixation_debounce_dur = 0.1  # seconds gaze must be outside radius before flagging red
        gaze_outside_since = None
        fixation_flagged_red = False
        fixation_break_count = 0
        fixation_max_deviation = 0.0
        fixcross.color = 'white'
      Each Frame:
        # NOTE: eyetracker.getPosition() is the standard PsychoPy/ioHub Common Eye
        # Tracker Interface call and is assumed to report gaze in the same 'height'
        # units as the window. Verify this against your EyeLink/ioHub setup (e.g. by
        # printing gaze_pos during a test run) - swap for getLastGazePosition() or an
        # equivalent call if your backend names/units differ.
        if eyetracker is not None:
            try:
                gaze_pos = eyetracker.getPosition()
            except Exception:
                gaze_pos = None
        else:
            gaze_pos = None

        if gaze_pos is not None and not any(np.isnan(p) for p in gaze_pos):
            deviation = (gaze_pos[0]**2 + gaze_pos[1]**2) ** 0.5
            fixation_max_deviation = max(fixation_max_deviation, deviation)

            if deviation > fixation_radius:
                if gaze_outside_since is None:
                    gaze_outside_since = t
                if (t - gaze_outside_since) >= fixation_debounce_dur and not fixation_flagged_red:
                    fixation_flagged_red = True
                    fixcross.color = 'red'
            else:
                if fixation_flagged_red:
                    fixation_break_count += 1
                gaze_outside_since = None
                fixation_flagged_red = False
                fixcross.color = 'white'
        # else: no valid sample this frame (blink or no tracker) - ignore, leave state unchanged
      End Routine:
        thisExp.addData('fixation_breaks', fixation_break_count)
        thisExp.addData('fixation_max_deviation', fixation_max_deviation)
  Routine placeholder
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    TextComponent fixcross_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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    PolygonComponent l_circle
      fillColor = none
      lineColor = black
      pos = (-0.5, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = norm
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    PolygonComponent r_circle
      fillColor = none
      lineColor = black
      pos = (0.5, 0)
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      units = norm
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  Routine cue
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        if cueDir == 'left':
            cuePos = (-0.5, 0)
        else:
            cuePos = (0.5, 0)
    PolygonComponent cue_circle
      fillColor = $[0,0,0]
      lineWidth = 5
      pos [set every repeat] = cuePos
      shape = circle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = height
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  Routine cue_to_target
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        jitter = jitter_list[jitter_index]
        jitter_index += 1
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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  Routine gabor_patch
    RoutineSettingsComponent gabor_patch
      stopVal [duration (s)] = 0.1
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if valid == 1:
            stimLoc = cueDir
        else:
            stimLoc = 'right' if cueDir == 'left' else 'left'

        stimPos = (-0.5, 0) if stimLoc == 'left' else (0.5, 0)
        gabor_angle = level * tiltDir
        gabor.ori = gabor_angle
        gabor.setPos(stimPos)
        gabor.sf = 5
    GratingComponent gabor
      contrast = 0.1
      mask = gauss
      ori [set every repeat] = gabor_angle
      pos [set every repeat] = stimPos
      sf = 5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      tex = sin
      units = height
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  Routine response
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      correctAns = $corr_response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Py
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      End Routine:
        if str(key_resp.keys) == str(corr_response):
            key_resp.corr = 1
        else:
            key_resp.corr = 0

        if key_resp.keys in ['', [], None]:
            noresp_count += 1

        stair.addResponse(key_resp.corr)

        # Update level for next trial
        try:
            level = next(stair)
        except StopIteration:
            level = stair.mean()

            # Track rolling accuracy
        if 'accuracy_history' not in expInfo:
            expInfo['accuracy_history'] = []

        expInfo['accuracy_history'].append(key_resp.corr)

        # Check stopping criteria after minimum trials
        min_trials = 60
        window_size = 20
        tolerance = 0.07
        target = 0.7

        if trials.thisN >= min_trials:
            recent = expInfo['accuracy_history'][-window_size:]
            rolling_acc = sum(recent) / len(recent)

            print(f"Trial {trials.thisN}: Rolling accuracy = {rolling_acc:.2f}")

            n_reversals = len(stair.reversalIntensities)

            if (abs(rolling_acc - target) <= tolerance and n_reversals >= 6):
                print(f"Stopping criteria met at trial {trials.thisN}!")
                print(f"Rolling accuracy: {rolling_acc:.2f}, Reversals: {n_reversals}")
                trials.finished = True  # this ends the trials loop early

        thisExp.addData('gabor_angle', gabor_angle)
        thisExp.addData('level', level)
        thisExp.addData('jitter', jitter)
        thisExp.addData('tiltDir', tiltDir)
        thisExp.addData('key_resp.corr', key_resp.corr)

        # Running threshold estimate, saved every trial (not just at the end) so it
        # is captured even if the run is closed before the experiment finishes
        if len(stair.reversalIntensities) >= 2:
            threshold_angle_estimate = np.mean(stair.reversalIntensities[-6:])
        else:
            threshold_angle_estimate = level
        thisExp.addData('threshold_angle_estimate', threshold_angle_estimate)

        # Running session summary, saved every trial for the same reason
        total_trials_completed = len(expInfo['accuracy_history'])
        total_correct = sum(expInfo['accuracy_history'])
        overall_accuracy = (total_correct / total_trials_completed * 100) if total_trials_completed > 0 else 0
        final_window = 20
        recent = expInfo['accuracy_history'][-final_window:]
        final_rolling_accuracy = (sum(recent) / len(recent) * 100) if len(recent) > 0 else 0
        n_reversals = len(stair.reversalIntensities)

        thisExp.addData('total_trials_completed', total_trials_completed)
        thisExp.addData('total_correct', total_correct)
        thisExp.addData('total_noresp', noresp_count)
        thisExp.addData('overall_accuracy', overall_accuracy)
        thisExp.addData('final_rolling_accuracy', final_rolling_accuracy)
        thisExp.addData('n_reversals', n_reversals)
  Routine instructions
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    KeyboardComponent progress
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instruction
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Please wait for the experimenter to begin the practice.
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    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
        # Create 60 unique jitters and shuffle them
        jitter_list = [round(1.0 + i * (1/60), 6) for i in range(61)]
        np.random.shuffle(jitter_list)
        jitter_index = 0

        #check jitters
        print(f"Jitter list length: {len(jitter_list)}")
        print(f"Min: {min(jitter_list)}, Max: {max(jitter_list)}")
        print(f"Step size: {round(jitter_list[1] - jitter_list[0], 6)}")

        # fixed up-down staircase rule (1-up/2-down, ~0.71 target performance)
        nUp=1
        nDown=2

        # control step size based on session number
        session=float(expInfo['session'])
        if session==1:
            stepSizes=[10, 5, 2, 1, 0.5, 0.1]
        else:
            stepSizes=[0.5, 0.1]

        from psychopy import data as pdata
        stair = pdata.StairHandler(
            startVal=float(expInfo['start_angle']),
            stepSizes=stepSizes,
            stepType='lin',
            nReversals=12,
            nTrials=60,
            nUp=nUp,
            nDown=nDown,
            minVal=0.1,
            maxVal=45.0
        )
        level = float(expInfo['start_angle'])
        noresp_count = 0

        import random
        import csv

        def generate_constrained_sequence(n_left, n_right, max_consecutive=4, max_attempts=10000):
            pool = []
            for _ in range(n_left):
                pool.append({'cueDir': 'left', 'valid': 1, 'trialType': 'valid_left'})
            for _ in range(n_right):
                pool.append({'cueDir': 'right', 'valid': 1, 'trialType': 'valid_right'})
            for attempt in range(max_attempts):
                random.shuffle(pool)
                valid_seq = True
                consec = 1
                for i in range(1, len(pool)):
                    if pool[i]['cueDir'] == pool[i-1]['cueDir']:
                        consec += 1
                        if consec > max_consecutive:
                            valid_seq = False
                            break
                    else:
                        consec = 1
                if valid_seq:
                    return list(pool)
            print("Warning: could not find valid cue sequence, using last attempt")
            return list(pool)

        def generate_constrained_tilt(n_total, max_consecutive=4, max_attempts=10000):
            tilt_pool = [1] * (n_total // 2) + [-1] * (n_total // 2)
            for attempt in range(max_attempts):
                random.shuffle(tilt_pool)
                valid = True
                consecutive = 1
                for i in range(1, len(tilt_pool)):
                    if tilt_pool[i] == tilt_pool[i-1]:
                        consecutive += 1
                        if consecutive > max_consecutive:
                            valid = False
                            break
                    else:
                        consecutive = 1
                if valid:
                    return list(tilt_pool)
            print("Warning: could not find valid tilt sequence, using last attempt")
            return list(tilt_pool)

        practice_trial_list = generate_constrained_sequence(30, 30, max_consecutive=4)
        tilt_sequence = generate_constrained_tilt(len(practice_trial_list), max_consecutive=4)
        for i, trial in enumerate(practice_trial_list):
            trial['tiltDir'] = tilt_sequence[i]
            trial['corr_response'] = '2' if trial['tiltDir'] == 1 else '1'

        practice_trial_list_file = f"data/_practice_trial_list_{expInfo['participant']}_session{expInfo['session']}.csv"
        with open(practice_trial_list_file, 'w', newline='') as f:
            writer = csv.DictWriter(f, fieldnames=['cueDir', 'valid', 'trialType', 'corr_response', 'tiltDir'])
            writer.writeheader()
            writer.writerows(practice_trial_list)
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_eye_start_trigger
      Code Type = Py
      Begin Routine:
        if eyetracker is not None:
            win.callOnFlip(eyetracker.sendMessage, f"SESSION_{expInfo['session']}_REC_START")
        thisExp.addData('eyetracker_rec_start_session', expInfo['session'])
  Routine savethreshold
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    CodeComponent code_7
      Code Type = Py
      End Experiment:
        import json

        # Get threshold angle
        # Calculate threshold from the reversal intensities
        if len(stair.reversalIntensities) >= 2:
            threshold_angle = np.mean(stair.reversalIntensities[-6:])
        else:
            threshold_angle = level  # fallback to last level if not enough reversals

        participant = expInfo['participant']
        session = expInfo['session']

        # Only the third (final) session's threshold is taken as the participant's
        # real threshold and written out for the main experiment to read
        if session == '3':
            threshold_file = f'data/threshold_{participant}.json'
            threshold_data = {
                'threshold_angle': threshold_angle
            }
            with open(threshold_file, 'w') as f:
                json.dump(threshold_data, f)
            print(f"Final threshold angle saved for participant {participant}: {threshold_angle:.2f} degrees ({threshold_file})")
        else:
            print(f"Session {session} complete - threshold not saved (only session 3 saves the final threshold). Current estimate: {threshold_angle:.2f} degrees")

        # Descriptive summary for this session
        accuracy_history = expInfo.get('accuracy_history', [])
        total_trials_completed = len(accuracy_history)
        total_correct = sum(accuracy_history)
        overall_accuracy = (total_correct / total_trials_completed * 100) if total_trials_completed > 0 else 0

        final_window = 20
        recent = accuracy_history[-final_window:]
        final_rolling_accuracy = (sum(recent) / len(recent) * 100) if len(recent) > 0 else 0

        n_reversals = len(stair.reversalIntensities)

        print(f"\n{'='*50}")
        print(f"SESSION {session} SUMMARY")
        print(f"{'='*50}")
        print(f"Total trials completed: {total_trials_completed}")
        print(f"Total no-response trials: {noresp_count}")
        print(f"Total correct: {total_correct}")
        print(f"Overall accuracy: {overall_accuracy:.1f}%")
        print(f"Final rolling accuracy (last {len(recent)} trials): {final_rolling_accuracy:.1f}%")
        print(f"Number of staircase reversals: {n_reversals}")
        print(f"Final threshold estimate: {threshold_angle:.2f} degrees")
        print(f"{'='*50}\n")
    EyetrackerRecordComponent etRecord_2
      actionType = Stop Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent code_eye_stop_trigger
      Code Type = Py
      Begin Routine:
        if eyetracker is not None:
            win.callOnFlip(eyetracker.sendMessage, f"SESSION_{expInfo['session']}_REC_STOP")
        thisExp.addData('eyetracker_rec_stop_session', expInfo['session'])
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
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  EyetrackerCalibrationRoutine eye_calibration
    borderColor = green
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = white
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = black
    innerRadius = 0.005
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.015
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
    useCustom = False
Flow
  EyetrackerCalibrationRoutine eye_calibration
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $practice_trial_list_file
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('cueDir', 'left'), ('valid', np.int64(1)), ('trialType', 'valid_left'), ('corr_response', '1'), ('tiltDir', np.int64(1))]),
      OrderedDict([('cueDir', 'left'), ('valid', np.int64(1)), ('trialType', 'valid_left'), ('corr_response', '2'), ('tiltDir', np.int64(-1))]),
      OrderedDict([('cueDir', 'right'), ('valid', np.int64(1)), ('trialType', 'valid_right'), ('corr_response', '1'), ('tiltDir', np.int64(1))]),
      OrderedDict([('cueDir', 'right'), ('valid', np.int64(1)), ('trialType', 'valid_right'), ('corr_response', '2'), ('tiltDir', np.int64(-1))])]
    Routine fixation
    Routine cue
    Routine cue_to_target
    Routine gabor_patch
    Routine response
  LoopTerminator trials
  Routine savethreshold
